PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '0', 'taskVer': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1080, 1920]
  expName = stepped-two-rate-adaptation
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Routines
  Routine intro
    TextComponent introText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Beginning
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruction1
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Use Mouse. Space continue
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    KeyboardComponent instr1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent JScodeFix
      Code Type = Auto->JS
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    CodeComponent selectionCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Do error checking for correct values of taskVer
        try:
            taskVer = int(expInfo['taskVer']) # Check to see if this is safe
        except ValueError:
            taskVer = 0

        # Variables to keep track of the order, rotation and target choices
        orderChoice = taskVer % 6
        rotationChoice = np.floor( taskVer / 12 ) % 2
        targetChoice = np.floor( taskVer / 6) % 2

        # Order
        order = [0,1] # Default choice
        if (orderChoice == 0):
            order = [0,1]
        elif (orderChoice == 1):
            order = [0,2]
        elif (orderChoice == 2):
            order = [1,0]
        elif (orderChoice == 3):
            order = [1,2]
        elif (orderChoice == 4):
            order = [2,0]
        elif (orderChoice == 5):
            order = [2,1]


        # Rotation of the mouse angle
        rotation = [1,-1] # Default choice
        if (rotationChoice == 0):
            rotation = [1,-1]
        elif (rotationChoice == 1):
            rotation = [-1,1]

        # Choose set of angles for Main and Inverted task, respectively
        targetAngles = [[40,50],[130,140]] # Default choice
        if (targetChoice == 0):
            targetAngles = [[40,50],[130,140]]
        elif (targetChoice == 1):
            targetAngles = [[130,140],[40,50]]
      Begin Routine:
        loopCount = int(loopCount) # convert the loopCount in selectionLoop to an int
  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Space end
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    MouseComponent trial2Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial2CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        ang = None
        rtd = None

        #Set up rotations and main tasks
        # NOTE: JS isn't automatically converted with global keyword
        def setAbruptMainTask():
            print('Abrupt Main Task')
            global ang
            global rtd
            ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setRampedMainTask():
            print('Ramped Main Task')
            global ang
            global rtd
            if (trials2.thisN <= 47):
                ang = rotation[0] * (trials2.thisN+1)*0.625
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setStepMainTask():
            print('Step Main Task')
            global ang
            global rtd
            if (trials2.thisN <= 23):
                ang = rotation[0] * 7.5
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = rotation[0] * 15
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = rotation[0] * 22.5
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)
      Begin Routine:
        targetangle = targetAngles[0][trials2.thisN % 2]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial2Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial2Num.text = str(trials2.thisN+1)+' / 96'

        trial2Cursor.pos = (1.5,1.5)
        trial2Mouse.pos = (1.5,1.5)

        task = order[loopCount] # loopCount taken from the selectionVariables.xlsx

        if (task == 0):
            setAbruptMainTask()
        elif (task == 1):
            setRampedMainTask()
        elif (task == 2):
            setStepMainTask()
        else:
            setAbruptMainTask() # Contingency condition don't know if this is needed

        trial2Text.text = str(ang)
      Each Frame:
        CursorTargetDistance = sqrt((trial2Cursor.pos[0]-trial2Target.pos[0])**2 + (trial2Cursor.pos[1]-trial2Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial2Cursor.pos[0]**2 + trial2Cursor.pos[1]**2)

        steps.append(trial2Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial2Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial2Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial2Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial2Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial2Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial2Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = ((trial2Mouse.getPos()[0]*cos(rtd))-(trial2Mouse.getPos()[1]*sin(rtd)), (trial2Mouse.getPos()[0]*sin(rtd))+(trial2Mouse.getPos()[1]*cos(rtd)))
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial2Step
      startExpValue = 0
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    TextComponent trial2Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 96
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    KeyboardComponent trial2Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trial2Text
      letterHeight = 0.05
      pos = (-0.4, 0.3)
      startVal [time (s)] = 0.0
      text = ang
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  Routine trial1
    MouseComponent trial1Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial1CursorCode
      Code Type = Both
      Begin JS Routine:
        win.mouseVisible = false;
        targetangle = targetAngles[loopCount][(trials1.thisN % 2)];
        targetangle_rad = (pi * (targetangle / 180));
        targetPos = [(cos(targetangle_rad) * 0.4), (sin(targetangle_rad) * 0.4)];
        targetOpacity = 0;
        homeOpacity = 0;
        homeStart = false;
        reachOut = false;
        trial1Step = 1;
        steps = [];
        console.log("Align task");
        trial1Num.text = ((trials1.thisN + 1).toString() + " / 36");
        trial1Cursor.pos = [1.5, 1.5];
        trial1Mouse.pos = [1.5, 1.5];
      Begin Routine:
        win.mouseVisible = False

        targetangle = targetAngles[loopCount][trials1.thisN % 2] # targetAngles defined in instruction1
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial1Step = 1
        steps = []

        print("Align task")
        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial1Num.text = str(trials1.thisN+1)+' / 36'

        trial1Cursor.pos = (1.5,1.5)
        trial1Mouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trial1Cursor.pos[0]-trial1Target.pos[0])**2 + (trial1Cursor.pos[1]-trial1Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial1Cursor.pos[0]**2 + trial1Cursor.pos[1]**2)

        steps.append(trial1Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial1Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial1Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial1Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      Each JS Frame:
        CursorTargetDistance = Math.sqrt((Math.pow((trial1Cursor.pos[0] - trial1Target.pos[0]), 2) + Math.pow((trial1Cursor.pos[1] - trial1Target.pos[1]), 2)));
        CursorHomeDistance = Math.sqrt((Math.pow(trial1Cursor.pos[0], 2) + Math.pow(trial1Cursor.pos[1], 2)));
        steps.append(trial1Step);
        if ((! homeStart)) {
            homeOpacity = 1;
            targetOpacity = 0;
            trial1Step = 1;
            if ((CursorHomeDistance < 0.025)) {
                homeStart = true;
                console.log(((("end step 1" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (((! reachOut) && homeStart)) {
            homeOpacity = 0;
            targetOpacity = 1;
            trial1Step = 2;
            if ((CursorTargetDistance < 0.025)) {
                reachOut = true;
                console.log(((("end step 2" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (reachOut) {
            homeOpacity = 1;
            targetOpacity = 0;
            trial1Step = 3;
            if ((CursorHomeDistance < 0.025)) {
                console.log(((("end step 3" + " (") + globalClock.getTime().toString()) + ")"));
                continueRoutine = false;
            }
        }
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End JS Experiment:
        win.mouseVisible = true;
      End JS Routine:
        thisExp.addData("step", steps);
        thisExp.addData("targetangle_deg", targetangle);
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial1Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial1Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial1Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trial1Mouse.getPos()[0], trial1Mouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial1Step
      startExpValue = 0
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    TextComponent trial1Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 28
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    KeyboardComponent trial1Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial3
    MouseComponent trial3Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial3CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        ang = None
        rtd = None

        #Set up inverses
        # Might be possible combine these with the Main task functions
        def setAbruptInverseTask():
            print('Abrupt Inverse Task')
            global ang
            global rtd
            ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setRampedInverseTask():
            print('Ramped Inverse Task')
            global ang
            global rtd
            if (trials2.thisN <= 47):
                ang = rotation[1] * (trials2.thisN+1)*0.625
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setStepInverseTask():
            print('Step Inverse Task')
            global ang
            global rtd
            if (trials2.thisN <= 23):
                ang = rotation[1] * 7.5
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = rotation[1] * 15
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = rotation[1] * 22.5
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)
      Begin Routine:
        win.mouseVisible = False

        targetangle = targetAngles[loopCount][trials3.thisN % 2] # Alternate between the 2 choices
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial3Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial3Num.text = str(trials3.thisN+1)+' / 8'

        trial3Cursor.pos = (1.5,1.5)
        trial3Mouse.pos = (1.5,1.5)

        task = order[loopCount]

        if (task == 0):
            setAbruptInverseTask()
        elif (task == 1):
            setRampedInverseTask()
        elif (task == 2):
            setStepInverseTask()
        else:
            setAbruptInverseTask() # Contingency condition don't know if this is needed

        trial3Text.text = str(ang)
      Each Frame:
        CursorTargetDistance = sqrt((trial3Cursor.pos[0]-trial3Target.pos[0])**2 + (trial3Cursor.pos[1]-trial3Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial3Cursor.pos[0]**2 + trial3Cursor.pos[1]**2)

        steps.append(trial3Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial3Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial3Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial3Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial3Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial3Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial3Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = ((trial3Mouse.getPos()[0]*cos(rtd))-(trial3Mouse.getPos()[1]*sin(rtd)), (trial3Mouse.getPos()[0]*sin(rtd))+(trial3Mouse.getPos()[1]*cos(rtd)))
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial3Step
      startExpValue = 0
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    TextComponent trial3Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 8
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    KeyboardComponent trial3Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trial3Text
      letterHeight = 0.05
      pos = (-0.4, 0.3)
      startVal [time (s)] = 0.0
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  Routine trial4
    MouseComponent trial4Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial4CursorCode
      Code Type = Both
      Begin JS Routine:
        targetangle = targetAngles[loopCount][(trials4.thisN % 2)];
        targetangle_rad = (pi * (targetangle / 180));
        targetPos = [(cos(targetangle_rad) * 0.4), (sin(targetangle_rad) * 0.4)];
        targetOpacity = 0;
        homeOpacity = 0;
        bufferOpacity = 0;
        bufferRadius = Math.sqrt((Math.pow(trial4Cursor.pos[0], 2) + Math.pow(trial4Cursor.pos[1], 2)));
        cursorOpacity = 0;
        homeStart = false;
        reachOut = false;
        trial4Step = 1;
        steps = [];
        trial4Num.text = ((trials4.thisN + 1).toString() + " / 24");
        trial4Cursor.pos = [1.5, 1.5];
        trial4Mouse.pos = [1.5, 1.5];
        theta = ((targetangle / 180) * pi);
      Begin Routine:
        targetangle = targetAngles[loopCount][trials4.thisN % 2]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        targetOpacity = 0
        homeOpacity = 0
        #'buffer' circle set up
        bufferOpacity = 0
        bufferRadius = (sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2))
        #allows cursor opacity changing
        cursorOpacity = 0

        homeStart = False
        reachOut = False

        trial4Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial4Num.text = str(trials4.thisN+1)+' / 24'

        trial4Cursor.pos = (1.5,1.5)
        trial4Mouse.pos = (1.5,1.5)

        theta = (targetangle / 180) * pi

        print('Error Clamped Task')
      Each Frame:
        CursorTargetDistance = sqrt((trial4Cursor.pos[0]-trial4Target.pos[0])**2 + (trial4Cursor.pos[1]-trial4Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2)

        steps.append(trial3Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial4Step = 1
            bufferOpacity = 0
            cursorOpacity = 1
            if (CursorHomeDistance < .075):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial4Step = 2
            bufferOpacity = 0
            cursorOpacity = 1
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial4Step = 3
            #COntrols the 'buffer'
            bufferOpacity = 1
            bufferRadius = (sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2))
            #controls the cursor
            cursorOpacity = 0
            if (CursorHomeDistance < .2):
                cursorOpacity = 1
            if (CursorHomeDistance < .075):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      Each JS Frame:
        CursorTargetDistance = Math.sqrt((Math.pow((trial4Cursor.pos[0] - trial4Target.pos[0]), 2) + Math.pow((trial4Cursor.pos[1] - trial4Target.pos[1]), 2)));
        CursorHomeDistance = Math.sqrt((Math.pow(trial4Cursor.pos[0], 2) + Math.pow(trial4Cursor.pos[1], 2)));
        steps.append(trial3Step);
        if ((! homeStart)) {
            homeOpacity = 1;
            targetOpacity = 0;
            trial4Step = 1;
            bufferOpacity = 0;
            cursorOpacity = 1;
            if ((CursorHomeDistance < 0.075)) {
                homeStart = true;
                console.log(((("end step 1" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (((! reachOut) && homeStart)) {
            homeOpacity = 0;
            targetOpacity = 1;
            trial4Step = 2;
            bufferOpacity = 0;
            cursorOpacity = 1;
            if ((CursorTargetDistance < 0.025)) {
                reachOut = true;
                console.log(((("end step 2" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (reachOut) {
            homeOpacity = 1;
            targetOpacity = 0;
            trial4Step = 3;
            bufferOpacity = 1;
            bufferRadius = Math.sqrt((Math.pow(trial4Cursor.pos[0], 2) + Math.pow(trial4Cursor.pos[1], 2)));
            cursorOpacity = 0;
            if ((CursorHomeDistance < 0.2)) {
                cursorOpacity = 1;
            }
            if ((CursorHomeDistance < 0.075)) {
                console.log(((("end step 3" + " (") + globalClock.getTime().toString()) + ")"));
                continueRoutine = false;
            }
        }
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End JS Experiment:
        win.mouseVisible = true;
      End JS Routine:
        thisExp.addData("step", steps);
        thisExp.addData("targetangle_deg", targetangle);
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial4Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial4Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial4Cursor
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = (sqrt((trial4Mouse.getPos()[0]**2)+(trial4Mouse.getPos()[1]**2))*(cos(theta)), sqrt((trial4Mouse.getPos()[0]**2)+(trial4Mouse.getPos()[1]**2))*(sin(theta)))
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial4Step
      startExpValue = 0
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    TextComponent trial4Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 24
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    KeyboardComponent trial4Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent trial4Buff
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = bufferOpacity
      shape = regular polygon...
      size [set every frame] = bufferRadius
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator selectionLoop loopType="TrialHandler"
    conditionsFile = selectionVariables.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'abruptConds.xlsx'), ('taskVersion', 'Abrupt')]),
      OrderedDict([('condsFile', 'rampedConds.xlsx'), ('taskVersion', 'Ramped')]),
      OrderedDict([('condsFile', 'steppedConds.xlsx'), ('taskVersion', 'Stepped')])]
    Routine instruction1
    Routine fixation
    LoopInitiator trials1 loopType="TrialHandler"
      conditionsFile = trials1Cond.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 1)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 2)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 3)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 4)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 5)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 6)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 7)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 8)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 9)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 10)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 11)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 12)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 13)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 14)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 15)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 16)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 17)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 18)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 19)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 20)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 21)]),
        OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 22)])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
      Routine trial1
    LoopTerminator trials1
    Routine fixation
    LoopInitiator trials2 loopType="TrialHandler"
      conditionsFile = trials2Cond.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 1)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 2)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 3)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 4)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 5)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 6)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 7)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 8)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 9)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 10)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 11)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 12)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 13)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 14)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 15)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 16)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 17)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 18)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 19)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 20)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 21)]),
        OrderedDict([('trialsType', 2), ('trialsNum', 2), ('trialNum', 22)])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
      Routine trial2
    LoopTerminator trials2
    Routine fixation
    LoopInitiator trials3 loopType="TrialHandler"
      conditionsFile = trials3Cond.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 1)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 2)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 3)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 4)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 5)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 6)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 7)]),
        OrderedDict([('trialsType', 3), ('trialsNum', 3), ('trialNum', 8)])]
      Routine trial3
    LoopTerminator trials3
    LoopInitiator trials4 loopType="TrialHandler"
      conditionsFile = trials4Cond.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 1)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 2)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 3)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 4)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 5)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 6)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 7)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 8)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 9)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 10)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 11)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 12)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 13)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 14)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 15)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 16)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 17)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 18)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 19)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 20)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 21)]),
        OrderedDict([('trialsType', 4), ('trialsNum', 4), ('trialNum', 22)])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
      Routine trial4
    LoopTerminator trials4
  LoopTerminator selectionLoop
  Routine end
